PsychoPy2experiment version="2021.1.2"
Settings
  Completed URL = completedURL
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Incomplete URL = incompleteURL
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1280, 800]
  expName = Test2_CLEAN_rpep_Helena
  logging level = debug
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Routines
  Routine trial
    TextComponent txt_trial
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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      text [set every repeat]:
        $stim
    KeyboardComponent key_resp_2
      allowedKeys = 'f','j'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    ImageComponent Rectangle_buttons
      image = /Users/HC/Documents/MASTER 1/RPEP/Rpep_Helena_06:02/Rectangles/rect_noanswer.jpg
      opacity = 0.7
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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  Routine RSI
    TextComponent RSI_txt
      letterHeight = 0.15
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      text [set every repeat] = +
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  Routine General_Instruction
    TextComponent general_instruct_txt
      letterHeight = 0.064
      startVal [time (s)] = 0.0
      units = norm
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      text:
        You will see a row of five arrowheads next to eachother like this:
        <<<<<

        Focus on the arrowhead in the middle:
        - PRESS ‘ f ‘ on the keyboard when middle arrowhead is pointed to the LEFT

        - PRESS ‘ j ‘ on the keyboard when middle arrowhead is pointed to the RIGHT

        The arrowheads around the middle one can have another direction like this:
        <<><<

        Only respond to the direction of the arrowhead in the middle
        (in this case: right —>  press ‘j’).  Ignore the arrowheads around it.

        Answer as fast as possible!
        If you understand these instructions, press the spacebar to continue.
    KeyboardComponent general_instruct_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Goodbye
  Routine Error_estimation
    TextComponent error_est_txt
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        How many errors did the other participant make?

        0 = press ‘a’ on keyboard
        1 = press ‘p’ on keyboard
    KeyboardComponent error_est_key
      allowedKeys = 'a','z'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine O
    ImageComponent Rectangles
      image = rectsocial/rect_neutral.jpg
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      texture resolution = 512
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    ImageComponent Rectangle_O_Reaction
      image [set every repeat] = $resp_other
      size = (2, 2)
      startVal [time (s)] = $rt_other
      stopVal [duration (s)] = 1
      texture resolution = 512
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    TextComponent txt_O
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $stimulus
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  Routine P
    ImageComponent Rectangles_2
      image = rectsocial/rect_neutral.jpg
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      texture resolution = 512
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    KeyboardComponent Key_resp_P
      allowedKeys = 'f','j'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    TextComponent txt_P
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $stimulus
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  Routine POP_instruct
    TextComponent pop_instruct_txt
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        PERFORM
        OBSERVE
        PERFORM

        press space bar when ready
    KeyboardComponent pop_instruct_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine OPP_instruct
    TextComponent sequence_instruct_txt
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        OBSERVE
        PERFORM
        PERFORM

        press space bar
    KeyboardComponent seq_instruct_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Practice
  Routine Welcome
    TextComponent welcome_txt
      letterHeight = 0.064
      startVal [time (s)] = 0.0
      units = norm
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      text:
        Hello and welcome.

        You are taking part in a task interaction experiment with another participant. You will both do the same task which will be given in a sequence of 3 trials.
        Before the task, instructions will be given to either respond yourself or to observe how the other particpant responded.

        The goal is to keep track of the errors of the other participant. After every 3 trials, you have to point out if the other participant made a mistake or not.

        Since this is an online experiment, you will be interacting with a previous participant. This means that you will interact with the other person by his/hers stored data.

        Press the spacebar to go continue.
    KeyboardComponent welcome_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Welcome
  Routine General_Instruction
  Routine Practice
  LoopInitiator Block loopType="TrialHandler"
    loopType = sequential
    nReps = 10
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    Routine OPP_instruct
    LoopInitiator OPP loopType="TrialHandler"
      loopType = random
      nReps = 1
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      LoopInitiator Trials_O1 loopType="TrialHandler"
        Selected rows = $random(1)*20
        conditionsFile = var_excel.xlsx
        loopType = random
        nReps = 1
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        conditions:
          [{'stim': 'A', 'stimulus': '<<<<<', 'congruency': 1, 'corResp': 'f', 'rt_other': 0.4, 'resp_other': 'rectsocial/r_left.jpg', 'acc_other': 1, 'rsi_time': None},
          {'stim': 'B', 'stimulus': '>>>>>', 'congruency': 1, 'corResp': 'j', 'rt_other': 0.5, 'resp_other': 'rectsocial/r_left.jpg', 'acc_other': 0, 'rsi_time': None},
          {'stim': 'C', 'stimulus': '<<><<', 'congruency': 0, 'corResp': 'j', 'rt_other': 0.6, 'resp_other': 'rectsocial/r_right.jpg', 'acc_other': 1, 'rsi_time': None},
          {'stim': 'D', 'stimulus': '>><>>', 'congruency': 0, 'corResp': 'f', 'rt_other': 0.7, 'resp_other': 'rectsocial/r_right.jpg', 'acc_other': 0, 'rsi_time': None},
          {'stim': 'E', 'stimulus': '<<<<<', 'congruency': 1, 'corResp': 'f', 'rt_other': 0.4, 'resp_other': 'rectsocial/r_left.jpg', 'acc_other': 1, 'rsi_time': None},
          {'stim': 'F', 'stimulus': '>>>>>', 'congruency': 1, 'corResp': 'j', 'rt_other': 0.5, 'resp_other': 'rectsocial/r_right.jpg', 'acc_other': 1, 'rsi_time': None},
          {'stim': 'G', 'stimulus': '<<><<', 'congruency': 0, 'corResp': 'j', 'rt_other': 0.6, 'resp_other': 'rectsocial/r_left.jpg', 'acc_other': 0, 'rsi_time': None},
          {'stim': 'H', 'stimulus': '>><>>', 'congruency': 0, 'corResp': 'f', 'rt_other': 0.7, 'resp_other': 'rectsocial/r_right.jpg', 'acc_other': 0, 'rsi_time': None},
          {'stim': 'I', 'stimulus': '<<<<<', 'congruency': 1, 'corResp': 'f', 'rt_other': 0.4, 'resp_other': 'rectsocial/r_left.jpg', 'acc_other': 1, 'rsi_time': None}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
        Routine O
      LoopTerminator Trials_O1
      Routine RSI
      LoopInitiator Trials_P_2 loopType="TrialHandler"
        Selected rows = $random(1)*20
        conditionsFile = var_excel.xlsx
        loopType = random
        nReps = 1
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        conditions:
          [{'stim': 'A', 'stimulus': '<<<<<', 'congruency': 1, 'corResp': 'f', 'rt_other': 0.4, 'resp_other': 'rectsocial/r_left.jpg', 'acc_other': 1, 'rsi_time': None},
          {'stim': 'B', 'stimulus': '>>>>>', 'congruency': 1, 'corResp': 'j', 'rt_other': 0.5, 'resp_other': 'rectsocial/r_left.jpg', 'acc_other': 0, 'rsi_time': None},
          {'stim': 'C', 'stimulus': '<<><<', 'congruency': 0, 'corResp': 'j', 'rt_other': 0.6, 'resp_other': 'rectsocial/r_right.jpg', 'acc_other': 1, 'rsi_time': None},
          {'stim': 'D', 'stimulus': '>><>>', 'congruency': 0, 'corResp': 'f', 'rt_other': 0.7, 'resp_other': 'rectsocial/r_right.jpg', 'acc_other': 0, 'rsi_time': None},
          {'stim': 'E', 'stimulus': '<<<<<', 'congruency': 1, 'corResp': 'f', 'rt_other': 0.4, 'resp_other': 'rectsocial/r_left.jpg', 'acc_other': 1, 'rsi_time': None},
          {'stim': 'F', 'stimulus': '>>>>>', 'congruency': 1, 'corResp': 'j', 'rt_other': 0.5, 'resp_other': 'rectsocial/r_right.jpg', 'acc_other': 1, 'rsi_time': None},
          {'stim': 'G', 'stimulus': '<<><<', 'congruency': 0, 'corResp': 'j', 'rt_other': 0.6, 'resp_other': 'rectsocial/r_left.jpg', 'acc_other': 0, 'rsi_time': None},
          {'stim': 'H', 'stimulus': '>><>>', 'congruency': 0, 'corResp': 'f', 'rt_other': 0.7, 'resp_other': 'rectsocial/r_right.jpg', 'acc_other': 0, 'rsi_time': None},
          {'stim': 'I', 'stimulus': '<<<<<', 'congruency': 1, 'corResp': 'f', 'rt_other': 0.4, 'resp_other': 'rectsocial/r_left.jpg', 'acc_other': 1, 'rsi_time': None}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
        Routine P
      LoopTerminator Trials_P_2
      Routine RSI
      LoopInitiator Trials_P_3 loopType="TrialHandler"
        Selected rows = $random(1)*20
        conditionsFile = var_excel.xlsx
        loopType = random
        nReps = 1
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        conditions:
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        Routine P
      LoopTerminator Trials_P_3
    LoopTerminator OPP
    Routine Error_estimation
    Routine POP_instruct
    LoopInitiator POP loopType="TrialHandler"
      loopType = random
      nReps = 1
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      LoopInitiator Trials_P_4 loopType="TrialHandler"
        Selected rows = $random(1)*20
        conditionsFile = var_excel.xlsx
        loopType = random
        nReps = 1
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        conditions:
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        Routine P
      LoopTerminator Trials_P_4
      Routine RSI
      LoopInitiator Trials_O_5 loopType="TrialHandler"
        Selected rows = $random(1)*20
        conditionsFile = var_excel.xlsx
        loopType = random
        nReps = 1
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        conditions:
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        Routine O
      LoopTerminator Trials_O_5
      Routine RSI
      LoopInitiator Trials_P_6 loopType="TrialHandler"
        Selected rows = $random(1)*20
        conditionsFile = var_excel.xlsx
        loopType = random
        nReps = 1
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        conditions:
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        Routine P
      LoopTerminator Trials_P_6
    LoopTerminator POP
    Routine Error_estimation
  LoopTerminator Block
  Routine Goodbye
